CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Name>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:GFP
    Name the output image:GFPspline
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:RFP
    Name the output image:RFPspline
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:GFP
    Name the output image:GFPCorr
    Select the illumination function:GFPspline
    Select how the illumination function is applied:Subtract
    Select the input image:RFP
    Name the output image:RFPCorr
    Select the illumination function:RFPspline
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:RFPCorr
    Name the primary objects to be identified:TotalCell
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0003,1
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.01
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:GFPCorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Name>_\g<Series>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:10|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
    Objects:TotalCell
    Directory:Default Output Folder sub-folder|\g<Name>_\g<Series>
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Masks
    Image:GFPCorr
